PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = fingertapping
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Routines
  Routine Rest
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from win32com.client import Dispatch as com
        oxy = com("OxySoft.OxyApplication")
      Begin Routine:
        restdur = randint(low = 18, high = 25)
        oxy.WriteEvent("B","rest")
    TextComponent crosshair
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $restdur
      text = X
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  Routine left
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        oxy.WriteEvent("L","left")
    TextComponent text
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = <
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  Routine right
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        oxy.WriteEvent("R","right")
    TextComponent text_2
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = >
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine Rest
    Routine left
    Routine Rest
    Routine right
  LoopTerminator trials
